OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

CSV File Reader => #0
  Filename = C:/Users/seohyunseo/Desktop/BCIMusic/Data/sample2_data_8000.csv
#0.Output stream -> Temporal filter "Theta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 7
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #2
  Equation = x*x
#0.Output stream -> Temporal filter "Alpha"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #4
  Equation = x*x
#0.Output stream -> Temporal filter "Beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #6
  Equation = x*x
Input - A=#2, Input - B=#4, Input - C=#6, Input - D=#6 -> Simple DSP "Beta ratio" => #7
  Equation = C/(A+B+C+D)*100
#0.Output stream -> Temporal filter "Gamma"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #9
  Equation = x*x
Input - A=#2, Input - B=#4, Input - C=#6, Input - D=#9 -> Simple DSP "Theta ratio" => #10
  Equation = A/(A+B+C+D)*100
Input - A=#2, Input - B=#4, Input - C=#6, Input - D=#9 -> Simple DSP "Alpha ratio" => #11
  Equation = B/(A+B+C+D)*100
Input - A=#2, Input - B=#4, Input - C=#6, Input - D=#9 -> Simple DSP "Gamma ratio" => #12
  Equation = D/(A+B+C+D)*100
New input=#10, New input(1)=#11, New input(2)=#7, New input(3)=#12 -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Scripts/MLtest/MLtest1.py
