OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

CSV File Reader => #0
  Filename = C:/Users/seohyunseo/Desktop/BCIMusic/Data/sample2_data_8000.csv
#0.Output stream -> Temporal filter "Alpha"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #2
  Equation = x*x
#0.Output stream -> Temporal filter "low beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 17
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #4
  Equation = x*x
Input - A=#2, Input - B=#4 -> Simple DSP "ratio"
  Equation = A/(A+B)*100
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Scripts/digist_upgraded1.py
