OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

CSV File Reader => #0
  Filename = C:/Users/seohyunseo/Desktop/BCIMusic/Data/sample_data_15s.csv
#0.Output stream -> Downsampling => #1
  New sampling rate (Hz) = 128
  Frequency cutoff ratio = 1/4
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.5
-> Temporal filter "Alpha"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 3
-> Simple DSP "x^2" => #4
  Equation = x*x
#1 -> Temporal filter "Beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 18
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 3
-> Simple DSP "x^2" => #7
  Equation = x*x
Input - A=#4, Input - B=#7 -> Simple DSP "ratio"
  Equation = A/(A+B)*100
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Scripts/soundModel4.py
#1 -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Scripts/soundModel3.py
