OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 2
-> Temporal filter "Alpha"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #3
  Equation = x*x
#0.Signal stream -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 2
-> Temporal filter "high beta"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 25
  High Cut-off Frequency (Hz) = 31
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x^2" => #6
  Equation = x*x
Input - A=#3, Input - B=#6 -> Simple DSP "ratio"
  Equation = A/(A+B)*100
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Scripts/sprint/sprint1.py
#0.Signal stream -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Scripts/sprint/sprint2.py
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
