OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Simple DSP
  Equation = A*A
-> Signal average => #4
#0.Signal stream -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Simple DSP
  Equation = A*A
-> Signal average => #8
Input - A=#4, Input - B=#8 -> Simple DSP
  Equation = A/(A+B)*100
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/seohyunseo/Desktop/BCIMusic/Test/L-system-composition/scripts/OV/test.py
